# Generated by Configurator on Mon Nov 25 14:00:11 GMT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,TSICam,TSI,TSICam
Device,XYStage,Zaber,XYStage

# Pre-init settings for devices
Property,TSICam,CameraID,0
Property,XYStage,Axis Number (X Axis),2
Property,XYStage,Axis Number (Y Axis),1
Property,XYStage,Controller Device Number,2
Property,XYStage,Controller Device Number (Y Axis),
Property,XYStage,Linear Motion Per Motor Rev (X Axis) [mm],1.0000
Property,XYStage,Linear Motion Per Motor Rev (Y Axis) [mm],1.0000
Property,XYStage,Lockstep Group (X Axis),0
Property,XYStage,Lockstep Group (Y Axis),0
Property,XYStage,Motor Steps Per Rev (X Axis),1000000
Property,XYStage,Motor Steps Per Rev (Y Axis),1000000
Property,XYStage,Zaber Serial Port,COM3

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,TSICam
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Core,Initialize,1
PixelSize_um,Res0,0.128
PixelSizeAffine,Res0,0.128,0.0,0.0,0.0,0.128,0.0

